PsychoPy2experiment version="1.82.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s' %(expInfo['Subject_ID'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Subject_ID': u'', u'Session_Number': u'', u'Boolean_Complexity': u''}
  expName = Categorization
  logging level = data
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent probStCode
      Begin Experiment:
        #--import the required packages.
        from openpyxl import load_workbook
        import random

        #--trialOrder will help track the order in which
        #--the categorization problems are chosen.
        dirty = 1

        #--The follwing lines of code generate the different (shape,color,number) combinations for the test cases.
        iniTrials = range(1, 12, 2) #--total number of samples possible
        trialOrder = random.sample(iniTrials, 3) #--Selects 3 random test cases from the total list.


        exttrialOrder = [x + 1 for x in trialOrder]#--the enfored test cases based on the test cases selected above.
        [trialOrder.append(x) for x in exttrialOrder]#--this list contains all the test cases that will be used.
        shuffle(trialOrder) #this makes the order of test cases random

        #print trialOrder
        #--The Code maintains every element as a object of type Stimulus.
        #--Each object will have a distinct combination of Shape, Color, Number and parity.
        #--Every repeat will have a different combination of objects with random and distinct property assignment.
        class Stimulus:
            #--x,y,z will have random assignment of shape, color and number.
            #--the random value assignment can be interpreted from the value in assign
            #--inCat gives the category of the stimuli object
            #--par gives the parity value
            def __init__(self, x, y, z, inCat, par, assign):
                if assign <= 2: #-- x=shape y=number z=color
                    self.s = x
                    self.n = y
                    self.c = z
                    self.cat = inCat
                    self.p = par
                elif assign <= 4: #-- x=shape y=color z=number
                    self.s = x
                    self.n = z
                    self.c = y
                    self.cat = inCat
                    self.p = par
                elif assign <= 6: #-- x=number y=shape z=color
                    self.s = y
                    self.n = x
                    self.c = z
                    self.cat = inCat
                    self.p = par
                elif assign <= 8: #-- x=number y=color z=shape
                    self.s = z
                    self.n = x
                    self.c = y
                    self.cat = inCat
                    self.p = par
                elif assign <= 10: #-- x=color y=number z=shape
                    self.s = z
                    self.n = y
                    self.c = x
                    self.cat = inCat
                    self.p = par
                else: #-- x=color y=shape z=number
                    self.s = y
                    self.n = z
                    self.c = x
                    self.cat = inCat
                    self.p = par


        # random 8 "trial" numbers among 16(=2^4) possible combinations of shape, number, color, incat value
        # to avoid repeating the test stimuli once tested. --sk

        # Make 6 random numbers among 16
        testTypeNo = random.sample(range(1,16,1), 6 )
        shuffle(testTypeNo)
        print testTypeNo

        shapeList      = ['square', 'triangle']
        numberList     = ['2','1']
        stcolorList    = ['black', 'white']
        inCatList      = ['0','1']
      Begin Routine:
        #---The following code the main implementation of ths Experiment

        #--This part extracts parameter values which are defined using the buider mode.
        assignOrder = trialOrder[repeat.thisN] #-Helps decide the random order to be used on this repeat.
        BComp = expInfo['Boolean_Complexity'] #-Gets the Boolean complexity given by the test taker at the begining of the experiment.

        #--This part intiializes variable value which have to consistent throughout the experiment.
        ovalSize = [0.2, 0.15]
        #shpSize =
        stmdepth = -20.0
        assignTrack    = []


        #fshape      = ['square', 'triangle']
        #fnumber     = ['2','1']
        #fstcolor    = ['black', 'white']
        #finCat      = ['0','1']
        fparity     = 1
        #
        ##--This part creates the randomization of the property value assignment.
        #shuffle(fshape)
        #shuffle(fnumber)
        #shuffle(fstcolor)
        #shuffle(finCat)

        typeNo = testTypeNo[repeat.thisN]
        print ['typeNp', typeNo]

        if typeNo == 1:
            shpID   = [0, 1]
            numID   = [0, 1]
            colID   = [0, 1]
            inCatID = [0, 1]
        elif typeNo == 2:
            shpID   = [0, 1]
            numID   = [1, 0] ##
            colID   = [0, 1]
            inCatID = [0, 1]
        elif typeNo == 3:
            shpID   = [0, 1]
            numID   = [0, 1]
            colID   = [1, 0] ##
            inCatID = [0, 1]
        elif typeNo == 4:
            shpID   = [0, 1]
            numID   = [0, 1]
            colID   = [0, 1]
            inCatID = [1, 0] ##
        elif typeNo == 5:
            shpID   = [0, 1]
            numID   = [1, 0] #
            colID   = [1, 0] #
            inCatID = [0, 1]
        elif typeNo == 6:
            shpID   = [0, 1]
            numID   = [1, 0] #
            colID   = [0, 1]
            inCatID = [1, 0] #
        elif typeNo == 7:
            shpID   = [0, 1]
            numID   = [0, 1]
            colID   = [1, 0] #
            inCatID = [1, 0] #
        elif typeNo == 8:
            shpID   = [0, 1]
            numID   = [1, 0] #
            colID   = [1, 0] #
            inCatID = [1, 0] #
        elif typeNo == 9:
            shpID   = [1, 0] #
            numID   = [0, 1]
            colID   = [0, 1]
            inCatID = [0, 1]
        elif typeNo == 10:
            shpID   = [1, 0] #
            numID   = [1, 0] #
            colID   = [0, 1]
            inCatID = [0, 1]
        elif typeNo == 11:
            shpID   = [1, 0] #
            numID   = [0, 1]
            colID   = [1, 0] ##
            inCatID = [0, 1]
        elif typeNo == 12:
            shpID   = [1, 0]
            numID   = [0, 1]
            colID   = [0, 1]
            inCatID = [1, 0] ##
        elif typeNo == 13:
            shpID   = [1, 0]
            numID   = [1, 0] #
            colID   = [1, 0] #
            inCatID = [0, 1]
        elif typeNo == 14:
            shpID   = [1, 0]
            numID   = [1, 0] #
            colID   = [0, 1]
            inCatID = [1, 0] #
        elif typeNo == 15:
            shpID   = [1, 0]
            numID   = [0, 1]
            colID   = [1, 0] #
            inCatID = [1, 0] #
        elif typeNo == 16:
            shpID   = [1, 0]
            numID   = [1, 0] #
            colID   = [1, 0] #
            inCatID = [1, 0] #


        fshape = []
        fshape.append( shapeList[ shpID[0] ] )
        fshape.append( shapeList[ shpID[1] ] )

        fnumber = []
        fnumber.append( numberList[ numID[0] ] )
        fnumber.append( numberList[ numID[1] ] )

        fstcolor = []
        fstcolor.append( stcolorList[ colID[0] ] )
        fstcolor.append( stcolorList[ colID[1] ] )

        finCat = []
        finCat.append( inCatList[ inCatID[0] ] )
        finCat.append( inCatList[ inCatID[1] ] )

        print fshape
        print fnumber
        print fstcolor
        print finCat


        #--The Shape, Color and Number Properties will be randomly assigned to a, b and c.
        #--a,b and c will be used instead of property lists above while creating the parity clusters.
        #--Use of a, b and c will allow us to use a standard formula type approach to create the clusters
        #-- while maintining the need for random use of properties to give the desired Boolean Complexity.
        a = [None, None]
        b = [None, None]
        c = [None, None]

        #--The Following part will randomly assign
        #-- the property lists of Shape, Color and Number to lists a, b and c.
        #-- while allowing us to track the assignemnts.
        #--variable assignOrder is used for this purpose.
        #-- Note: This method is usable only because we have small number of possible random assignments.
        #--       If the number of Randomizations have increased and tracking has become more complex I recommend using a new method to do this.

        #--This Part is used to perform the random assignment of the properties to a, b, and c.
        if assignOrder == 1:
            a = fshape
            b = fnumber
            c = fstcolor
            finCat = ['0','1']
            fparity = 1
            assignOrder = 1
        elif assignOrder == 2:
            a = fshape
            b = fnumber
            c = fstcolor
            finCat = ['1','0']
            fparity = 0
            assignOrder = 2
        elif assignOrder == 3:
            a = fshape
            b = fstcolor
            c = fnumber
            finCat = ['0','1']
            fparity = 1
            assignOrder = 3
        elif assignOrder == 4:
            a = fshape
            b = fstcolor
            c = fnumber
            finCat = ['1','0']
            fparity = 0
            assignOrder = 4
        elif assignOrder == 5:
            a = fnumber
            b = fshape
            c = fstcolor
            finCat = ['0','1']
            fparity = 1
            assignOrder = 5
        elif assignOrder == 6:
            a = fnumber
            b = fshape
            c = fstcolor
            finCat = ['1','0']
            fparity = 0
            assignOrder = 6
        elif assignOrder == 7:
            a = fnumber
            b = fstcolor
            c = fshape
            finCat = ['0','1']
            fparity = 1
            assignOrder = 7
        elif assignOrder == 8:
            a = fnumber
            b = fstcolor
            c = fshape
            finCat = ['1','0']
            fparity = 0
            assignOrder = 8
        elif assignOrder == 9:
            a = fstcolor
            b = fnumber
            c = fshape
            finCat = ['0','1']
            fparity = 1
            assignOrder = 9
        elif assignOrder == 10:
            a = fstcolor
            b = fnumber
            c = fshape
            finCat = ['1','0']
            fparity = 0
            assignOrder = 10
        elif assignOrder == 11:
            a = fstcolor
            b = fshape
            c = fnumber
            finCat = ['0','1']
            fparity = 1
            assignOrder = 11
        else:
            a = fstcolor
            b = fshape
            c = fnumber
            finCat = ['1','0']
            fparity = 0
            assignOrder = 12

        #--This part will create the stimuli objects with discrete property value combinations.
        stimuli = [] #-- we will use this list to perform the operations commons to all the stimuli objects.

        if BComp == '2': #---Assignment for Boolean Complexity 2
            stimuli.append(Stimulus(a[1], b[1], c[1], finCat[1], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[1], c[0], finCat[1], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[0], c[0], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[0], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[1], c[0], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[1], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[0], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[0], c[0], finCat[0], fparity, assignOrder))

        if BComp == '5': #---Assignment for Boolean Complexity 5
            stimuli.append(Stimulus(a[1], b[1], c[1], finCat[1], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[0], c[0], finCat[1], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[0], c[0], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[0], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[1], c[0], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[1], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[0], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[1], c[0], finCat[0], fparity, assignOrder))

        if BComp == '6': #---Assignment for Boolean Complexity 6
            stimuli.append(Stimulus(a[1], b[1], c[1], finCat[1], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[0], c[0], finCat[1], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[1], c[0], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[0], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[1], c[0], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[0], b[1], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[0], c[1], finCat[0], fparity, assignOrder))
            stimuli.append(Stimulus(a[1], b[0], c[0], finCat[0], fparity, assignOrder))

        #--Here we right the stimuli element property values to 'stimuliList.xlsx'
        #--This excel file will be used as input during testing.
        r = 1
        shuffle(stimuli)
        for stm in stimuli:
            wb = load_workbook(filename = 'stimuliList.xlsx')
            ws = wb.get_sheet_by_name("Sheet1")

            ws.cell(row=r,column=0).value = stm.s #--shape value
            ws.cell(row=r,column=1).value = stm.n #--number value
            ws.cell(row=r,column=2).value = stm.c #--color value
            ws.cell(row=r,column=3).value = stm.cat #--category assignment value
            if stm.cat == '1':
                ws.cell(row=r,column=4).value = 'z' #--correct answer key value assignment
            else:
                ws.cell(row=r,column=4).value = 'm' #--correct answer key value assignment
            ws.cell(row=r,column=5).value = stm.p #--parity value assignment.
            wb.save('stimuliList.xlsx')
            r = r+1 #--incrementing r value so that next set of vaues can be written to the next line in the excel file.

        #--Displaying the Stimuli as 'in category' or 'not in category'
        #--the following variables will be used in displaying the stimuli
        stimuliList = []
        stmNum = -1
        #--In Category stimuli position variables
        inX = -0.375
        inY = 0.375
        #--Not In Category stimuli position variables
        outX = -0.375
        outY = -0.125

        shuffle(stimuli)

        #---Creating Stimuli-1
        #--This Part decides the positioning of the stimuli based on its parity
        stmNum  = stmNum+1
        #--Assinging the center point for the stimuli.
        if stimuli[stmNum].cat == '1':
            if inX > 0.5:
                inX = -0.375
                inY = 0.125
            posX = inX
            inX = inX+0.25
            posY = inY
        else:
            if outX > 0.5:
                outX = -0.375
                outY = -0.375
            posX = outX
            outX = outX+0.25
            posY = outY
        #--Drawing The Oval
        oval1 = visual.Polygon(win=win,
            edges = 100, size=ovalSize,
            ori=0, pos=[posX, posY],
            lineWidth=3, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1,depth=stmdepth+1.0,
            interpolate=True)
        oval1.setAutoDraw(True, log=None)
        stimuliList.append(oval1)
        #--This part Creates the shapes
        #--This part draws triangles
        if stimuli[stmNum].s == 'triangle':
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp11 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                    pos=[posX-0.04, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                    ori = 0, depth=stmdepth)
                shp11.tStart = t
                shp11.frameNStart = frameN
                shp11.setAutoDraw(True, log=None)
                stimuliList.append(shp11)

            shp12 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                pos=[posX, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                ori = 0, depth=stmdepth)
            shp12.tStart = t
            shp12.frameNStart = frameN
            shp12.setAutoDraw(True, log=None)
            stimuliList.append(shp12)

        else:
        #--This part draws squares
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp11 = visual.Rect(win=win,
                    width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                    ori=0, pos=[posX-0.04, posY],
                    lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                    fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                    opacity=1,depth=stmdepth,
                    interpolate=True)
                shp11.tStart = t
                shp11.frameNStart = frameN
                shp11.setAutoDraw(True, log=None)
                stimuliList.append(shp11)

            shp12 = visual.Rect(win=win,
                width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                ori=0, pos=[posX, posY],
                lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                opacity=1,depth=stmdepth,
                interpolate=True)
            shp12.tStart = t
            shp12.frameNStart = frameN
            shp12.setAutoDraw(True, log=None)
            stimuliList.append(shp12)

        #---creating Stimuli-2
        #--This Part decides the positioning of the stimuli based on its parity
        stmNum  = stmNum+1
        #--Assinging the center point for the stimuli.
        if stimuli[stmNum].cat == '1':
            if inX > 0.5:
                inX = -0.375
                inY = 0.125
            posX = inX
            inX = inX+0.25
            posY = inY
        else:
            if outX > 0.5:
                outX = -0.375
                outY = -0.375
            posX = outX
            outX = outX+0.25
            posY = outY
        #--This draws the oval.
        oval2 = visual.Polygon(win=win,
            edges = 100, size=ovalSize,
            ori=0, pos=[posX, posY],
            lineWidth=3, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1,depth=stmdepth+1.0,
            interpolate=True)
        oval2.setAutoDraw(True, log=None)
        stimuliList.append(oval2)
        #--This part creates the triangles
        if stimuli[stmNum].s == 'triangle':
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp21 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                    pos=[posX-0.04, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                    ori = 0, depth=stmdepth)
                shp21.tStart = t
                shp21.frameNStart = frameN
                shp21.setAutoDraw(True, log=None)
                stimuliList.append(shp21)

            shp22 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                pos=[posX, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                ori = 0, depth=stmdepth)
            shp22.tStart = t
            shp22.frameNStart = frameN
            shp22.setAutoDraw(True, log=None)
            stimuliList.append(shp22)

        else:
        #--This part creates the sqaures.
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp21 = visual.Rect(win=win,
                    width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                    ori=0, pos=[posX-0.04, posY],
                    lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                    fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                    opacity=1,depth=stmdepth,
                    interpolate=True)
                shp21.tStart = t
                shp21.frameNStart = frameN
                shp21.setAutoDraw(True, log=None)
                stimuliList.append(shp21)

            shp22 = visual.Rect(win=win,
                width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                ori=0, pos=[posX, posY],
                lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                opacity=1,depth=stmdepth,
                interpolate=True)
            shp22.tStart = t
            shp22.frameNStart = frameN
            shp22.setAutoDraw(True, log=None)
            stimuliList.append(shp22)

        #   creating Stimuli-3
        #This Part decides the positioning of the stimuli based on its parity
        stmNum  = stmNum+1
        #--Assinging the center point for the stimuli.
        if stimuli[stmNum].cat == '1':
            if inX > 0.5:
                inX = -0.375
                inY = 0.125
            posX = inX
            inX = inX+0.25
            posY = inY
        else:
            if outX > 0.5:
                outX = -0.375
                outY = -0.375
            posX = outX
            outX = outX+0.25
            posY = outY
        #--This draws the ovals
        oval3 = visual.Polygon(win=win,
            edges = 100, size=ovalSize,
            ori=0, pos=[posX, posY],
            lineWidth=3, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1,depth=stmdepth+1.0,
            interpolate=True)
        oval3.setAutoDraw(True, log=None)
        stimuliList.append(oval3)
        #--This part draws the traiangle
        if stimuli[stmNum].s == 'triangle':
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp31 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                    pos=[posX-0.04, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                    ori = 0, depth=stmdepth)
                shp31.tStart = t
                shp31.frameNStart = frameN
                shp31.setAutoDraw(True, log=None)
                stimuliList.append(shp31)

            shp32 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                pos=[posX, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                ori = 0, depth=stmdepth)
            shp32.tStart = t
            shp32.frameNStart = frameN
            shp32.setAutoDraw(True, log=None)
            stimuliList.append(shp32)

        else:
        #-- This part draws squares
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp31 = visual.Rect(win=win,
                    width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                    ori=0, pos=[posX-0.04, posY],
                    lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                    fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                    opacity=1,depth=stmdepth,
                    interpolate=True)
                shp31.tStart = t
                shp31.frameNStart = frameN
                shp31.setAutoDraw(True, log=None)
                stimuliList.append(shp31)

            shp32 = visual.Rect(win=win,
                width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                ori=0, pos=[posX, posY],
                lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                opacity=1,depth=stmdepth,
                interpolate=True)
            shp32.tStart = t
            shp32.frameNStart = frameN
            shp32.setAutoDraw(True, log=None)
            stimuliList.append(shp32)

        #   creating Stimuli-4
        #This Part decides the positioning of the stimuli based on its parity
        stmNum  = stmNum+1
        #--Assinging the center point for the stimuli.
        if stimuli[stmNum].cat == '1':
            if inX > 0.5:
                inX = -0.375
                inY = 0.125
            posX = inX
            inX = inX+0.25
            posY = inY
        else:
            if outX > 0.5:
                outX = -0.375
                outY = -0.375
            posX = outX
            outX = outX+0.25
            posY = outY
        #--This part draws the oval
        oval4 = visual.Polygon(win=win,
            edges = 100, size=ovalSize,
            ori=0, pos=[posX, posY],
            lineWidth=3, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1,depth=stmdepth+1.0,
            interpolate=True)
        oval4.setAutoDraw(True, log=None)
        stimuliList.append(oval4)
        #--This part draws the triangle
        if stimuli[stmNum].s == 'triangle':
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp41 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                    pos=[posX-0.04, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                    ori = 0, depth=stmdepth)
                shp41.tStart = t
                shp41.frameNStart = frameN
                shp41.setAutoDraw(True, log=None)
                stimuliList.append(shp41)

            shp42 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                pos=[posX, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                ori = 0, depth=stmdepth)
            shp42.tStart = t
            shp42.frameNStart = frameN
            shp42.setAutoDraw(True, log=None)
            stimuliList.append(shp42)

        else:
        #This Part draws the sqaures.
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp41 = visual.Rect(win=win,
                    width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                    ori=0, pos=[posX-0.04, posY],
                    lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                    fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                    opacity=1,depth=stmdepth,
                    interpolate=True)
                shp41.tStart = t
                shp41.frameNStart = frameN
                shp41.setAutoDraw(True, log=None)
                stimuliList.append(shp41)

            shp42 = visual.Rect(win=win,
                width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                ori=0, pos=[posX, posY],
                lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                opacity=1,depth=stmdepth,
                interpolate=True)
            shp42.tStart = t
            shp42.frameNStart = frameN
            shp42.setAutoDraw(True, log=None)
            stimuliList.append(shp42)

        #--creating Stimuli-5
        #--This Part decides the positioning of the stimuli based on its parity
        stmNum  = stmNum+1
        #--Assinging the center point for the stimuli.
        if stimuli[stmNum].cat == '1':
            if inX > 0.5:
                inX = -0.375
                inY = 0.125
            posX = inX
            inX = inX+0.25
            posY = inY
        else:
            if outX > 0.5:
                outX = -0.375
                outY = -0.375
            posX = outX
            outX = outX+0.25
            posY = outY
        #--This part draws the oval
        oval5 = visual.Polygon(win=win,
            edges = 100, size=ovalSize,
            ori=0, pos=[posX, posY],
            lineWidth=3, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1,depth=stmdepth+1.0,
            interpolate=True)
        oval5.setAutoDraw(True, log=None)
        stimuliList.append(oval5)
        #--This part draws the Triangle
        if stimuli[stmNum].s == 'triangle':
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp51 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                    pos=[posX-0.04, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                    ori = 0, depth=stmdepth)
                shp51.tStart = t
                shp51.frameNStart = frameN
                shp51.setAutoDraw(True, log=None)
                stimuliList.append(shp51)

            shp52 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                pos=[posX, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                ori = 0, depth=stmdepth)
            shp52.tStart = t
            shp52.frameNStart = frameN
            shp52.setAutoDraw(True, log=None)
            stimuliList.append(shp52)

        else:
        #--This part draws the sqaures
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp51 = visual.Rect(win=win,
                    width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                    ori=0, pos=[posX-0.04, posY],
                    lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                    fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                    opacity=1,depth=stmdepth,
                    interpolate=True)
                shp51.tStart = t
                shp51.frameNStart = frameN
                shp51.setAutoDraw(True, log=None)
                stimuliList.append(shp51)

            shp52 = visual.Rect(win=win,
                width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                ori=0, pos=[posX, posY],
                lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                opacity=1,depth=stmdepth,
                interpolate=True)
            shp52.tStart = t
            shp52.frameNStart = frameN
            shp52.setAutoDraw(True, log=None)
            stimuliList.append(shp52)

        #   creating Stimuli-6
        #This Part decides the positioning of the stimuli based on its parity
        stmNum  = stmNum+1
        #--Assinging the center point for the stimuli.
        if stimuli[stmNum].cat == '1':
            if inX > 0.5:
                inX = -0.375
                inY = 0.125
            posX = inX
            inX = inX+0.25
            posY = inY
        else:
            if outX > 0.5:
                outX = -0.375
                outY = -0.375
            posX = outX
            outX = outX+0.25
            posY = outY
        #--This part draws the Oval
        oval6 = visual.Polygon(win=win,
            edges = 100, size=ovalSize,
            ori=0, pos=[posX, posY],
            lineWidth=3, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1,depth=stmdepth+1.0,
            interpolate=True)
        oval6.setAutoDraw(True, log=None)
        stimuliList.append(oval6)
        #--This part draws the Triangles
        if stimuli[stmNum].s == 'triangle':
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp61 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                    pos=[posX-0.04, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                    ori = 0, depth=stmdepth)
                shp61.tStart = t
                shp61.frameNStart = frameN
                shp61.setAutoDraw(True, log=None)
                stimuliList.append(shp61)

            shp62 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                pos=[posX, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                ori = 0, depth=stmdepth)
            shp62.tStart = t
            shp62.frameNStart = frameN
            shp62.setAutoDraw(True, log=None)
            stimuliList.append(shp62)

        else:
        #--This part draws the squares
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp61 = visual.Rect(win=win,
                    width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                    ori=0, pos=[posX-0.04, posY],
                    lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                    fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                    opacity=1,depth=stmdepth,
                    interpolate=True)
                shp61.tStart = t
                shp61.frameNStart = frameN
                shp61.setAutoDraw(True, log=None)
                stimuliList.append(shp61)

            shp62 = visual.Rect(win=win,
                width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                ori=0, pos=[posX, posY],
                lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                opacity=1,depth=stmdepth,
                interpolate=True)
            shp62.tStart = t
            shp62.frameNStart = frameN
            shp62.setAutoDraw(True, log=None)
            stimuliList.append(shp62)

        #   creating Stimuli-7
        #This Part decides the positioning of the stimuli based on its parity
        stmNum  = stmNum+1
        #--Assinging the center point for the stimuli.
        if stimuli[stmNum].cat == '1':
            if inX > 0.5:
                inX = -0.375
                inY = 0.125
            posX = inX
            inX = inX+0.25
            posY = inY
        else:
            if outX > 0.5:
                outX = -0.375
                outY = -0.375
            posX = outX
            outX = outX+0.25
            posY = outY
        #--This part draws the Ovals
        oval7 = visual.Polygon(win=win,
            edges = 100, size=ovalSize,
            ori=0, pos=[posX, posY],
            lineWidth=3, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1,depth=stmdepth+1.0,
            interpolate=True)
        oval7.setAutoDraw(True, log=None)
        stimuliList.append(oval7)
        #--This part draws the Triangles
        if stimuli[stmNum].s == 'triangle':
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp71 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                    pos=[posX-0.04, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                    ori = 0, depth=stmdepth)
                shp71.tStart = t
                shp71.frameNStart = frameN
                shp71.setAutoDraw(True, log=None)
                stimuliList.append(shp71)

            shp72 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                pos=[posX, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                ori = 0, depth=stmdepth)
            shp72.tStart = t
            shp72.frameNStart = frameN
            shp72.setAutoDraw(True, log=None)
            stimuliList.append(shp72)

        else:
        #--This part draws the sqaures
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp71 = visual.Rect(win=win,
                    width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                    ori=0, pos=[posX-0.04, posY],
                    lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                    fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                    opacity=1,depth=stmdepth,
                    interpolate=True)
                shp71.tStart = t
                shp71.frameNStart = frameN
                shp71.setAutoDraw(True, log=None)
                stimuliList.append(shp71)

            shp72 = visual.Rect(win=win,
                width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                ori=0, pos=[posX, posY],
                lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                opacity=1,depth=stmdepth,
                interpolate=True)
            shp72.tStart = t
            shp72.frameNStart = frameN
            shp72.setAutoDraw(True, log=None)
            stimuliList.append(shp72)

        #   creating Stimuli-8
        #This Part decides the positioning of the stimuli based on its parity
        stmNum  = stmNum+1
        #--Assinging the center point for the stimuli.
        if stimuli[stmNum].cat == '1':
            if inX >0.5:
                inX = -0.375
                inY = 0.125
            posX = inX
            inX = inX+0.25
            posY = inY
        else:
            if outX > 0.5:
                outX = -0.375
                outY = -0.375
            posX = outX
            outX = outX+0.25
            posY = outY
        #This part draws the Oval
        oval8 = visual.Polygon(win=win,
            edges = 100, size=ovalSize,
            ori=0, pos=[posX, posY],
            lineWidth=3, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1,depth=stmdepth,
            interpolate=True)
        oval8.setAutoDraw(True, log=None)
        stimuliList.append(oval8)
        #--This part draws the Triangles
        if stimuli[stmNum].s == 'triangle':
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp81 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                    pos=[posX-0.04, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                    ori = 0, depth=stmdepth)
                shp81.tStart = t
                shp81.frameNStart = frameN
                shp81.setAutoDraw(True, log=None)
                stimuliList.append(shp81)

            shp82 = visual.Polygon(win, edges=3, radius=1, size=[0.015,0.035], lineColor=[-1,-1,-1],
                pos=[posX, posY], fillColor=stimuli[stmNum].c, lineWidth=2, autoLog=False,
                ori = 0, depth=stmdepth)
            shp82.tStart = t
            shp82.frameNStart = frameN
            shp82.setAutoDraw(True, log=None)
            stimuliList.append(shp82)

        else:
        #--This part draws the squares.
            if stimuli[stmNum].n == '2': #--controls whether to show 2 elements or 1.
                shp81 = visual.Rect(win=win,
                    width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                    ori=0, pos=[posX-0.04, posY],
                    lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                    fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                    opacity=1,depth=stmdepth,
                    interpolate=True)
                shp81.tStart = t
                shp81.frameNStart = frameN
                shp81.setAutoDraw(True, log=None)
                stimuliList.append(shp81)

            shp82 = visual.Rect(win=win,
                width=[0.025, 0.05][0], height=[0.025, 0.05][1],
                ori=0, pos=[posX, posY],
                lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
                fillColor=stimuli[stmNum].c, fillColorSpace='rgb',
                opacity=1,depth=stmdepth,
                interpolate=True)
            shp82.tStart = t
            shp82.frameNStart = frameN
            shp82.setAutoDraw(True, log=None)
            stimuliList.append(shp82)
      End Routine:
        #--This part will delete all the displayed elements at the end of the Routine
        for stmComp in stimuliList:
            if hasattr(stmComp, "setAutoDraw"):
                stmComp.setAutoDraw(False)
    PolygonComponent topTitle
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 10
      pos = [0, 0.55]
      lineWidth = 4
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.4, 0.1]
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    TextComponent inCatText
      color = black
      text = In Category
      stopVal [duration (s)] = 10
      pos = [0, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    PolygonComponent bottomTitle
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 10
      pos = [0, -0.55]
      lineWidth = 4
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.4, 0.1]
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    TextComponent notinCatText
      color = Black
      text = Not In Category
      stopVal [duration (s)] = 10
      pos = [0, -0.54]
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    TextComponent trialmsg
      text = Test Number :
      stopVal [time (s)] = 10
      pos = [-0.8, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent trialNum
      stopVal [time (s)] = 10
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text [set every repeat]:
        $repeat.thisN+1
    StaticComponent ISI
      stopVal [time (s)] = 0.1
      startVal [time (s)] = 0.0
    PolygonComponent categories
      fillColor = $[1,1,1]
      stopVal [time (s)] = 10
      lineWidth = 4
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [1, 1]
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    PolygonComponent categorySeparator
      fillColor = $[-1,-1,-1]
      stopVal [time (s)] = 10
      lineWidth = 4
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [1, 1]
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  Routine blankSpace
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.250
      startVal [time (s)] = 0.0
  Routine instructPage
    TextComponent topLeft
      text = Exp Name : Categorization
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent topRight
      stopVal [duration (s)] = 0.0
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        More Information:
        1) Info Line 1
        2) Info Line 2
    TextComponent instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        Instructions

        (1) Study Phase (10 seconds)
        Study the objects.
        Some are labeled “In Category,” and others labeled “Not In Category.”

        (2) Test Phase
        One object is presented at a time.
        Press “z” if it is In Category.
        Press “m” if it is Not In Category.

        The Study and Test Phases will repeat for a different set of objects.
    TextComponent getContinue
      text = Press Spacebar to start.
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.09
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    KeyboardComponent contInput
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent startPgCode
      Begin Experiment:
        # import the gui package in PsychoPy

        from psychopy import gui
  Routine nextTrial
    TextComponent contMsg
      color = White
      text = Press any key to go on to the next set.
      startVal [time (s)] = $repeat.thisN < 5
      letterHeight = 0.06
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    TextComponent exitMsg
      color = White
      startVal [time (s)] = $repeat.thisN == 5
      letterHeight = 0.07
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      text:
        Thank you !!
        You have completed the Experiment.
        Press any key to exit.
    KeyboardComponent contKeyPress
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trialtest
    CodeComponent code
      Begin Routine:
        #--The following variables control the display of elements during
        #--the testing phase of the experiment.

        #--This controls the shape to be dispalyed
        nvertices = 0
        if shape == 'square':
            nvertices = 4
        else:
            nvertices = 3

        temp = nvertices

        #--This controls the number of shapes in the element.
        if number == 2:
            flag = 2
        if number == 3:
            flag = 3
    TextComponent trialTestMsg
      text = Test Number :
      pos = [-0.8, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent trialTestNum
      text [set every repeat] = $repeat.thisN+1
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    PolygonComponent oval
      fillColor = $[1,1,1]
      pos = [0, 0.3]
      lineWidth = 3
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      nVertices = 100
      size = [0.3, 0.2]
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    PolygonComponent square1
      opacity [set every repeat] = $number-1
      fillColor [set every repeat] = $stcolor
      pos = [-0.05, 0.3]
      lineWidth = 2
      lineColor = $[-1,-1,-1]
      startVal [condition] = $nvertices==4
      size = [0.025, 0.05]
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    PolygonComponent square2
      fillColor [set every repeat] = $stcolor
      pos = [0, 0.3]
      lineWidth = 2
      lineColor = $[-1,-1,-1]
      startVal [condition] = $nvertices==4
      size = [0.025, 0.05]
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    PolygonComponent triangle1
      opacity [set every repeat] = $number-1
      fillColor [set every repeat] = $stcolor
      pos = [-0.05, 0.3]
      lineWidth = 2
      lineColor = $[-1,-1,-1]
      startVal [condition] = $nvertices==3
      nVertices = 3
      size = [0.025, 0.05]
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    PolygonComponent triangle2
      fillColor [set every repeat] = $stcolor
      pos = [0, 0.3]
      lineWidth = 2
      lineColor = $[-1,-1,-1]
      startVal [condition] = $nvertices==3
      nVertices = 3
      size = [0.025, 0.05]
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    TextComponent inputmsg
      pos = [0, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press "z" to answer In Category.
        Press "m" to answer Not In Cateogry.
    KeyboardComponent key_resp_3
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.0
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Flow
  Routine instructPage
  LoopInitiator repeat loopType="TrialHandler"
    loopType = sequential
    nReps = 6
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    Routine trial
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stimuliList.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'shape': u'square', u'inCategory': 0, u'corrAns': u'm', u'stcolor': u'white', u'number': 2},
        {u'shape': u'square', u'inCategory': 0, u'corrAns': u'm', u'stcolor': u'black', u'number': 1},
        {u'shape': u'square', u'inCategory': 0, u'corrAns': u'm', u'stcolor': u'black', u'number': 2},
        {u'shape': u'triangle', u'inCategory': 1, u'corrAns': u'z', u'stcolor': u'white', u'number': 2},
        {u'shape': u'triangle', u'inCategory': 0, u'corrAns': u'm', u'stcolor': u'white', u'number': 1},
        {u'shape': u'square', u'inCategory': 0, u'corrAns': u'm', u'stcolor': u'white', u'number': 1},
        {u'shape': u'triangle', u'inCategory': 0, u'corrAns': u'm', u'stcolor': u'black', u'number': 1},
        {u'shape': u'triangle', u'inCategory': 1, u'corrAns': u'z', u'stcolor': u'black', u'number': 2}]
      Routine trialtest
      Routine blankSpace
    LoopTerminator trials
    Routine nextTrial
  LoopTerminator repeat
